PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = colPal
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Routines
  Routine trial
    ImageComponent image
      image = None
      size [set every repeat] = [size,size]
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = pix
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    ImageComponent val
      image = None
      pos = (0, -250)
      size [set every repeat] = (size, 20)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent hueSlider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (.37, .02)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0, 360)
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    SliderComponent satSlider
      flip = True
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.2, 0)
      size = (.02, .37)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0, 1)
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    SliderComponent valSlider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (.37, .02)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,1)
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      pos = (0, 0.35)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from psychopy import misc

        def createPalette(size):
            # Create array
            hsv = np.ones([size,size,3], dtype=float)

            # Set hue
            hsv[:,:,0] = np.linspace(0,360, size, endpoint=False)

            # Set saturation
            for i in range(size):
                hsv[:,i, 1] = np.linspace(0,1, size, endpoint=False)

            # Convert to RGB
            rgb = misc.hsv2rgb(hsv)

            # Make in range 0:1 for image stim
            rgb[:][:][:] =  (rgb[:][:][:] + 1) / 2
            return rgb

        def createValue(size):
            # Create array
            hsv = np.zeros([20,size,3], dtype=float)
            # Set value
            hsv[:,:,2] = np.linspace(0,1, size, endpoint=False)
            # Convert to RGB
            rgb = misc.hsv2rgb(hsv)

            # Make in range 0:1 for image stim
            rgb[:][:][:] =  (rgb[:][:][:] + 1) / 2
            return rgb


        size = 400
        valBar = createValue(size)
        rgb = createPalette(size)
      Begin Routine:
        image.setImage(rgb)
        val.setImage(valBar)
      Each Frame:
        h = hueSlider.getRating() or 0
        s = satSlider.getRating() or 0
        v = valSlider.getRating() or 0


        polygon.fillColor = [h,s,v]
    TextComponent text_2
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press space to continue
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  Routine colourSelected
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        text.text = f"Hue: {h:.2f}\nSat: {s:.2f}\nVal: {v:.2f}"
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine colourSelected
  LoopTerminator trials
